PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID (Your initials and the last 5 digits of your phone number, example: JS45323)'], expName, expInfo['date'])
  Experiment info = {'Participant ID (Your initials and the last 5 digits of your phone number, example: JS45323)': '', 'Session': "['1', '2']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1360, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = PVT
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        myClock = new_util.Clock()
      Begin Routine:
        myClock.reset();
      Each Frame:
        time = myClock.getTime()
      End Routine:
        msg = Response.rt
        msg_ms = msg
    TextComponent text_2
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS [En]


        A counter will appear and start counting at random times, press SPACE as fast as possible when it appears.


        Press SPACE to start


        Instruções [PT]

        Um cronometro vai aparecer e começar a contar aleatoriamente, pressionar a tecla SPACE o mais rapidamente possível quando ele aparecer.

        Pressiona SPACE para começar
    KeyboardComponent Start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            overall_timer = new_util.Clock



        import java.util.Random;

        min = 2
        max = 10

        if randFloat(float(min), float(max)):

            Random_rand = new_Random()

            randDuration = rand.nextFloat() * (max - min) + min


        thisExp.addData('stimulus_interval', randDuration)
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randDuration
      store = all keys
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  Routine feedback
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        msg = Response.rt*1000
        msg_ms = msg
        #print(msg_ms)
    TextComponent Feedback
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg_ms
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  Routine End
    TextComponent End_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        This is the end of the experiment!

        Thank you for participating.
  Routine check
    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        sw = overall_timer.getTime()

        print(sw)

        if sw >= 300:
            continueRoutine = False
            trials.finished = True
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine ISI
    Routine trial
    Routine feedback
    Routine check
  LoopTerminator trials
  Routine End
